PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = solo_experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = $statement
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Disagree","Agree"
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine routine2
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $str(reward_today) + " additional followers " + " today" + " or " + str(future_reward) + "  additional followers " + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine routine_3
    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $str(reward_today) + " additional likes " + " today" + " or " + str(future_reward) + "  additional likes " + " after " + str(delay) + " days"
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    KeyboardComponent key_resp_2
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine routine_1
  Routine Instruction
    TextComponent text_4
      color = 0.7255, -0.8431, -0.5294
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Instruction for task 1:
        Provide a response on the slider with the help of the mouse by clicking on any point on the scale.
  Routine Instruction2
    TextComponent text_5
      color = 0.7255, -0.8431, -0.5294
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Instruction for task 2 and 3:
        Press 't' if you prefer the additional likes/followers today
        Press 'l' if you prefer additional likes/followers later
Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition_statements.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'statement': 'I am good at resisting temptation.'},
      {'statement': 'I have a hard time breaking bad habits.'},
      {'statement': 'I am lazy.'},
      {'statement': 'I say inappropriate things.'},
      {'statement': 'I do certain things that are bad for me, if they are fun.'},
      {'statement': 'I refuse things that are bad for me.'},
      {'statement': 'I wish I had more self-discipline.'},
      {'statement': 'People would say that 1 have iron self-discipline.'},
      {'statement': 'Pleasure and fun sometimes keep me from getting work done.'},
      {'statement': 'I have trouble concentrating.'},
      {'statement': 'I am able to work effectively toward long-term goals.'},
      {'statement': 'Sometimes I can’t stop myself from doing something, even if I know it is wrong.'},
      {'statement': 'I often act without thinking through all the alternatives.'}]
    Routine trial
  LoopTerminator trials
  Routine Instruction2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = con_followers.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 25, 'delay': 15, 'reward_type': 'followers'},
      {'reward_today': 15, 'future_reward': 30, 'delay': 50, 'reward_type': 'followers'},
      {'reward_today': 22, 'future_reward': 35, 'delay': 35, 'reward_type': 'followers'},
      {'reward_today': 31, 'future_reward': 50, 'delay': 30, 'reward_type': 'followers'},
      {'reward_today': 44, 'future_reward': 55, 'delay': 42, 'reward_type': 'followers'},
      {'reward_today': 50, 'future_reward': 60, 'delay': 70, 'reward_type': 'followers'},
      {'reward_today': 58, 'future_reward': 75, 'delay': 100, 'reward_type': 'followers'},
      {'reward_today': 60, 'future_reward': 80, 'delay': 66, 'reward_type': 'followers'},
      {'reward_today': 70, 'future_reward': 85, 'delay': 90, 'reward_type': 'followers'}]
    Routine routine2
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = con_likes.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 25, 'delay': 15, 'reward_type': 'likes'},
      {'reward_today': 15, 'future_reward': 30, 'delay': 50, 'reward_type': 'likes'},
      {'reward_today': 22, 'future_reward': 35, 'delay': 35, 'reward_type': 'likes'},
      {'reward_today': 31, 'future_reward': 50, 'delay': 30, 'reward_type': 'likes'},
      {'reward_today': 44, 'future_reward': 55, 'delay': 42, 'reward_type': 'likes'},
      {'reward_today': 50, 'future_reward': 60, 'delay': 70, 'reward_type': 'likes'},
      {'reward_today': 58, 'future_reward': 75, 'delay': 100, 'reward_type': 'likes'},
      {'reward_today': 60, 'future_reward': 80, 'delay': 66, 'reward_type': 'likes'},
      {'reward_today': 70, 'future_reward': 85, 'delay': 90, 'reward_type': 'likes'}]
    Routine routine_3
  LoopTerminator trials_3
